PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exp2
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    ImageComponent image
      image = C:/Users/itsas/Downloads/27-Table3-1 (1).png
      size = (1, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 30
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 31.0
      stopVal [duration (s)] = 45.0
      text = Enter whatever you remember: 
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Flow
  Routine trial
